CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Input images are slices OR max projections from the nuclei channel, and segmented slices OR max projections from the Memglow channel. Include the memglow images so that we can overlay the cell outlines on them. Use the MAX filter to exclude or include max projections as needed']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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (directory doesnot containregexp "[\\\\/]\\.") (file doesnot startwith ".") (file doesnot contain "max")

Metadata:[module_num:2|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notes:['Adjust the "max" portion of the regular expression as needed']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Name>.*)_m(?P<Position>[0-9]{1,2})_t(?P<Time>[0-9]{3})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['Relate the masks to the images, and the channels to each other']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does endwith "c002.tiff")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (extension does ispng)
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    Name to assign these objects:CellsFromPNG
    Select the image type:Objects
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    Select the rule criteria:and (file does endwith "c001.tiff")
    Name to assign these images:Memglow
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ConvertImageToObjects:[module_num:5|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enabled:False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
    Select the input image:CellLabel
    Name the output object:CellsFromLabel
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

EnhanceOrSuppressFeatures:[module_num:6|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notes:['Use 20 for normal images, 10 for small images. Too-small values allow erroneous cytoplasm detection']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
    Select the input image:DNA
    Name the output image:EnhancedDNA
    Select the operation:Suppress
    Feature size:10
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:EnhancedDNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):28,60
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
MeasureObjectSizeShape:[module_num:8|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notes:['In this step you need to select Cells in order to get the counts of nuclei per cell']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
    Select object sets to measure:CellsFromPNG, Nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

RelateObjects:[module_num:9|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notes:['Classifies the nuclei according to what cell they belong to']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
    Parent objects:CellsFromPNG
    Child objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
GrayToColor:[module_num:10|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notes:['Overlay DNA and Memglow images']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
    Select a color scheme:RGB
    Rescale intensity:Yes
    Select the image to be colored red:DNA
    Select the image to be colored green:Memglow
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    Name the output image:ColorImage
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:11|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notes:['Overlay the object outlines on the image']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorImage
    Name the output image:ObjectOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#21FFFF
    Select objects to display:Nuclei
    Select outline color:#FB02FF
    Select objects to display:CellsFromPNG

SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:ObjectOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_overlay
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:13|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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